begin model
begin parameters
  t0_beta_lactose_per                   1.000000e+10
  t0_PROTON_per                         1.000000e+10
  t0_WATER_cyt                          1.000000e+10
  fwd_LACTOSE_MUTAROTATION              1.000000e+00
  rvs_LACTOSE_MUTAROTATION              1.000000e+00
  fwd_GALACTOSE_MUTAROTATION            1.000000e+00
  rvs_GALACTOSE_MUTAROTATION            1.000000e+00
  fwd_GLUCOSE_MUTAROTATION              1.000000e+00
  rvs_GLUCOSE_MUTAROTATION              1.000000e+00
  fwd_TRANS_RXN_24                      1.000000e+00
  rvs_TRANS_RXN_24                      0.000000e+00
  fwd_TRANS_RXN_24_beta                 1.000000e+00
  rvs_TRANS_RXN_24_beta                 0.000000e+00
  fwd_TRANS_RXN_94                      1.000000e+00
  rvs_TRANS_RXN_94                      1.000000e+00
  fwd_RXN0_7215                         1.000000e+00
  rvs_RXN0_7215                         1.000000e+00
  fwd_RXN0_7217                         1.000000e+00
  rvs_RXN0_7217                         1.000000e+00
  fwd_RXN_17755                         1.000000e+00
  rvs_RXN_17755                         1.000000e+00
  fwd_BETAGALACTOSID_RXN                1.000000e+00
  rvs_BETAGALACTOSID_RXN                0.000000e+00
  fwd_BETAGALACTOSID_RXN_alpha          1.000000e+00
  rvs_BETAGALACTOSID_RXN_alpha          0.000000e+00
  fwd_RXN0_5363                         1.000000e+00
  rvs_RXN0_5363                         1.000000e+00
  fwd_RXN0_5363_beta                    1.000000e+00
  rvs_RXN0_5363_beta                    1.000000e+00
  fwd_ALLOLACTOSE_DEG_alpha             1.000000e+00
  rvs_ALLOLACTOSE_DEG_alpha             0.000000e+00
  fwd_ALLOLACTOSE_DEG_beta              1.000000e+00
  rvs_ALLOLACTOSE_DEG_beta              0.000000e+00
  fwd_RXN_17726                         1.000000e+00
  rvs_RXN_17726                         1.000000e+00
  fwd_RXN0_7219                         1.000000e+00
  rvs_RXN0_7219                         1.000000e+00
  fwd_GALACTOACETYLTRAN_RXN_galactose   1.000000e+00
  rvs_GALACTOACETYLTRAN_RXN_galactose   1.000000e+00
  t0_BETAGALACTOSID_CPLX_cyt            1.200000e+01
  t0_GALACTOACETYLTRAN_CPLX_cyt         1.200000e+01
  t0_LACY_MONOMER_mem                   1.000000e+00
  fwd_complex_assembly_rule_0           1.000000e-01
  rvs_complex_assembly_rule_0           0.000000e+00
  fwd_complex_assembly_rule_1           1.000000e-01
  rvs_complex_assembly_rule_1           0.000000e+00
  fwd_complex_assembly_rule_2           1.000000e+00
  rvs_complex_assembly_rule_2           0.000000e+00
  fwd_complex_assembly_rule_3           1.000000e+00
  rvs_complex_assembly_rule_3           0.000000e+00
end parameters

begin molecule types
  met(name~alpha_GALACTOSE~CPD_3801~ACETYL_COA~CO_A~CPD_3561~beta_lactose~PROTON~alpha_ALLOLACTOSE~WATER~alpha_glucose~D_ARABINOSE~_6_Acetyl_beta_D_Galactose~CPD_3785~Fructofuranose~MELIBIOSE~alpha_lactose~beta_ALLOLACTOSE~beta_glucose~beta_GALACTOSE,loc~cyt~per~ex)
  prot(name~LACY_MONOMER~BETAGALACTOSID_MONOMER~GALACTOACETYLTRAN_MONOMER,loc~cyt~mem~per~ex,up,dw)
end molecule types

begin observables
  Molecules obs_alpha_GALACTOSE_cyt              met(name~alpha_GALACTOSE,loc~cyt)
  Molecules obs_alpha_GALACTOSE_per              met(name~alpha_GALACTOSE,loc~per)
  Molecules obs_alpha_GALACTOSE_ex               met(name~alpha_GALACTOSE,loc~ex)
  Molecules obs_CPD_3801_cyt                     met(name~CPD_3801,loc~cyt)
  Molecules obs_CPD_3801_per                     met(name~CPD_3801,loc~per)
  Molecules obs_CPD_3801_ex                      met(name~CPD_3801,loc~ex)
  Molecules obs_ACETYL_COA_cyt                   met(name~ACETYL_COA,loc~cyt)
  Molecules obs_ACETYL_COA_per                   met(name~ACETYL_COA,loc~per)
  Molecules obs_ACETYL_COA_ex                    met(name~ACETYL_COA,loc~ex)
  Molecules obs_CO_A_cyt                         met(name~CO_A,loc~cyt)
  Molecules obs_CO_A_per                         met(name~CO_A,loc~per)
  Molecules obs_CO_A_ex                          met(name~CO_A,loc~ex)
  Molecules obs_CPD_3561_cyt                     met(name~CPD_3561,loc~cyt)
  Molecules obs_CPD_3561_per                     met(name~CPD_3561,loc~per)
  Molecules obs_CPD_3561_ex                      met(name~CPD_3561,loc~ex)
  Molecules obs_beta_lactose_cyt                 met(name~beta_lactose,loc~cyt)
  Molecules obs_beta_lactose_per                 met(name~beta_lactose,loc~per)
  Molecules obs_beta_lactose_ex                  met(name~beta_lactose,loc~ex)
  Molecules obs_PROTON_cyt                       met(name~PROTON,loc~cyt)
  Molecules obs_PROTON_per                       met(name~PROTON,loc~per)
  Molecules obs_PROTON_ex                        met(name~PROTON,loc~ex)
  Molecules obs_alpha_ALLOLACTOSE_cyt            met(name~alpha_ALLOLACTOSE,loc~cyt)
  Molecules obs_alpha_ALLOLACTOSE_per            met(name~alpha_ALLOLACTOSE,loc~per)
  Molecules obs_alpha_ALLOLACTOSE_ex             met(name~alpha_ALLOLACTOSE,loc~ex)
  Molecules obs_WATER_cyt                        met(name~WATER,loc~cyt)
  Molecules obs_WATER_per                        met(name~WATER,loc~per)
  Molecules obs_WATER_ex                         met(name~WATER,loc~ex)
  Molecules obs_alpha_glucose_cyt                met(name~alpha_glucose,loc~cyt)
  Molecules obs_alpha_glucose_per                met(name~alpha_glucose,loc~per)
  Molecules obs_alpha_glucose_ex                 met(name~alpha_glucose,loc~ex)
  Molecules obs_D_ARABINOSE_cyt                  met(name~D_ARABINOSE,loc~cyt)
  Molecules obs_D_ARABINOSE_per                  met(name~D_ARABINOSE,loc~per)
  Molecules obs_D_ARABINOSE_ex                   met(name~D_ARABINOSE,loc~ex)
  Molecules obs__6_Acetyl_beta_D_Galactose_cyt   met(name~_6_Acetyl_beta_D_Galactose,loc~cyt)
  Molecules obs__6_Acetyl_beta_D_Galactose_per   met(name~_6_Acetyl_beta_D_Galactose,loc~per)
  Molecules obs__6_Acetyl_beta_D_Galactose_ex    met(name~_6_Acetyl_beta_D_Galactose,loc~ex)
  Molecules obs_CPD_3785_cyt                     met(name~CPD_3785,loc~cyt)
  Molecules obs_CPD_3785_per                     met(name~CPD_3785,loc~per)
  Molecules obs_CPD_3785_ex                      met(name~CPD_3785,loc~ex)
  Molecules obs_Fructofuranose_cyt               met(name~Fructofuranose,loc~cyt)
  Molecules obs_Fructofuranose_per               met(name~Fructofuranose,loc~per)
  Molecules obs_Fructofuranose_ex                met(name~Fructofuranose,loc~ex)
  Molecules obs_MELIBIOSE_cyt                    met(name~MELIBIOSE,loc~cyt)
  Molecules obs_MELIBIOSE_per                    met(name~MELIBIOSE,loc~per)
  Molecules obs_MELIBIOSE_ex                     met(name~MELIBIOSE,loc~ex)
  Molecules obs_alpha_lactose_cyt                met(name~alpha_lactose,loc~cyt)
  Molecules obs_alpha_lactose_per                met(name~alpha_lactose,loc~per)
  Molecules obs_alpha_lactose_ex                 met(name~alpha_lactose,loc~ex)
  Molecules obs_beta_ALLOLACTOSE_cyt             met(name~beta_ALLOLACTOSE,loc~cyt)
  Molecules obs_beta_ALLOLACTOSE_per             met(name~beta_ALLOLACTOSE,loc~per)
  Molecules obs_beta_ALLOLACTOSE_ex              met(name~beta_ALLOLACTOSE,loc~ex)
  Molecules obs_beta_glucose_cyt                 met(name~beta_glucose,loc~cyt)
  Molecules obs_beta_glucose_per                 met(name~beta_glucose,loc~per)
  Molecules obs_beta_glucose_ex                  met(name~beta_glucose,loc~ex)
  Molecules obs_beta_GALACTOSE_cyt               met(name~beta_GALACTOSE,loc~cyt)
  Molecules obs_beta_GALACTOSE_per               met(name~beta_GALACTOSE,loc~per)
  Molecules obs_beta_GALACTOSE_ex                met(name~beta_GALACTOSE,loc~ex)
end observables

begin species
  met(name~beta_lactose,loc~per)                       t0_beta_lactose_per
  met(name~PROTON,loc~per)                             t0_PROTON_per
  met(name~WATER,loc~cyt)                              t0_WATER_cyt
  prot(name~BETAGALACTOSID_MONOMER,loc~cyt,up,dw)      t0_BETAGALACTOSID_CPLX_cyt
  prot(name~GALACTOACETYLTRAN_MONOMER,loc~cyt,up,dw)   t0_GALACTOACETYLTRAN_CPLX_cyt
  prot(name~LACY_MONOMER,loc~mem,up,dw)                t0_LACY_MONOMER_mem
end species

begin reaction rules
  LACTOSE_MUTAROTATION:             met(name~alpha_lactose,loc~cyt) <-> met(name~beta_lactose,loc~cyt)    fwd_LACTOSE_MUTAROTATION, rvs_LACTOSE_MUTAROTATION
  GALACTOSE_MUTAROTATION:           met(name~alpha_GALACTOSE,loc~cyt) <-> met(name~beta_GALACTOSE,loc~cyt)    fwd_GALACTOSE_MUTAROTATION, rvs_GALACTOSE_MUTAROTATION
  GLUCOSE_MUTAROTATION:             met(name~alpha_glucose,loc~cyt) <-> met(name~beta_glucose,loc~cyt)    fwd_GLUCOSE_MUTAROTATION, rvs_GLUCOSE_MUTAROTATION
  TRANS_RXN_24:                     prot(name~LACY_MONOMER) + met(name~PROTON,loc~per) + met(name~alpha_lactose,loc~per) <-> prot(name~LACY_MONOMER) + met(name~PROTON,loc~cyt) + met(name~alpha_lactose,loc~cyt)    fwd_TRANS_RXN_24, rvs_TRANS_RXN_24
  TRANS_RXN_24_beta:                prot(name~LACY_MONOMER) + met(name~PROTON,loc~per) + met(name~beta_lactose,loc~per) <-> prot(name~LACY_MONOMER) + met(name~PROTON,loc~cyt) + met(name~beta_lactose,loc~cyt)    fwd_TRANS_RXN_24_beta, rvs_TRANS_RXN_24_beta
  TRANS_RXN_94:                     prot(name~LACY_MONOMER) + met(name~PROTON,loc~per) + met(name~MELIBIOSE,loc~per) <-> prot(name~LACY_MONOMER) + met(name~PROTON,loc~cyt) + met(name~MELIBIOSE,loc~cyt)    fwd_TRANS_RXN_94, rvs_TRANS_RXN_94
  RXN0_7215:                        prot(name~LACY_MONOMER) + met(name~PROTON,loc~per) + met(name~CPD_3561,loc~per) <-> prot(name~LACY_MONOMER) + met(name~PROTON,loc~cyt) + met(name~CPD_3561,loc~cyt)    fwd_RXN0_7215, rvs_RXN0_7215
  RXN0_7217:                        prot(name~LACY_MONOMER) + met(name~PROTON,loc~per) + met(name~CPD_3785,loc~per) <-> prot(name~LACY_MONOMER) + met(name~PROTON,loc~cyt) + met(name~CPD_3785,loc~cyt)    fwd_RXN0_7217, rvs_RXN0_7217
  RXN_17755:                        prot(name~LACY_MONOMER) + met(name~PROTON,loc~per) + met(name~CPD_3801,loc~per) <-> prot(name~LACY_MONOMER) + met(name~PROTON,loc~cyt) + met(name~CPD_3801,loc~cyt)    fwd_RXN_17755, rvs_RXN_17755
  BETAGALACTOSID_RXN:               prot(name~BETAGALACTOSID_MONOMER,up!+,dw!+) + met(name~beta_lactose,loc~cyt) + met(name~WATER,loc~cyt) <-> prot(name~BETAGALACTOSID_MONOMER,up!+,dw!+) + met(name~beta_GALACTOSE,loc~cyt) + met(name~beta_glucose,loc~cyt)    fwd_BETAGALACTOSID_RXN, rvs_BETAGALACTOSID_RXN
  BETAGALACTOSID_RXN_alpha:         prot(name~BETAGALACTOSID_MONOMER,up!+,dw!+) + met(name~alpha_lactose,loc~cyt) + met(name~WATER,loc~cyt) <-> prot(name~BETAGALACTOSID_MONOMER,up!+,dw!+) + met(name~alpha_GALACTOSE,loc~cyt) + met(name~alpha_glucose,loc~cyt)    fwd_BETAGALACTOSID_RXN_alpha, rvs_BETAGALACTOSID_RXN_alpha
  RXN0_5363:                        prot(name~BETAGALACTOSID_MONOMER,up!+,dw!+) + met(name~alpha_lactose,loc~cyt) <-> prot(name~BETAGALACTOSID_MONOMER,up!+,dw!+) + met(name~alpha_ALLOLACTOSE,loc~cyt)    fwd_RXN0_5363, rvs_RXN0_5363
  RXN0_5363_beta:                   prot(name~BETAGALACTOSID_MONOMER,up!+,dw!+) + met(name~beta_lactose,loc~cyt) <-> prot(name~BETAGALACTOSID_MONOMER,up!+,dw!+) + met(name~beta_ALLOLACTOSE,loc~cyt)    fwd_RXN0_5363_beta, rvs_RXN0_5363_beta
  ALLOLACTOSE_DEG_alpha:            prot(name~BETAGALACTOSID_MONOMER,up!+,dw!+) + met(name~alpha_ALLOLACTOSE,loc~cyt) <-> prot(name~BETAGALACTOSID_MONOMER,up!+,dw!+) + met(name~alpha_GALACTOSE,loc~cyt)    fwd_ALLOLACTOSE_DEG_alpha, rvs_ALLOLACTOSE_DEG_alpha
  ALLOLACTOSE_DEG_beta:             prot(name~BETAGALACTOSID_MONOMER,up!+,dw!+) + met(name~beta_ALLOLACTOSE,loc~cyt) <-> prot(name~BETAGALACTOSID_MONOMER,up!+,dw!+) + met(name~beta_GALACTOSE,loc~cyt)    fwd_ALLOLACTOSE_DEG_beta, rvs_ALLOLACTOSE_DEG_beta
  RXN_17726:                        prot(name~BETAGALACTOSID_MONOMER,up!+,dw!+) + met(name~CPD_3561,loc~cyt) + met(name~WATER,loc~cyt) <-> prot(name~BETAGALACTOSID_MONOMER,up!+,dw!+) + met(name~beta_GALACTOSE,loc~cyt) + met(name~Fructofuranose,loc~cyt)    fwd_RXN_17726, rvs_RXN_17726
  RXN0_7219:                        prot(name~BETAGALACTOSID_MONOMER,up!+,dw!+) + met(name~CPD_3785,loc~cyt) + met(name~WATER,loc~cyt) <-> prot(name~BETAGALACTOSID_MONOMER,up!+,dw!+) + met(name~beta_GALACTOSE,loc~cyt) + met(name~D_ARABINOSE,loc~cyt)    fwd_RXN0_7219, rvs_RXN0_7219
  GALACTOACETYLTRAN_RXN_galactose:  prot(name~GALACTOACETYLTRAN_MONOMER,up!+,dw!+) + met(name~beta_GALACTOSE,loc~cyt) + met(name~ACETYL_COA,loc~cyt) <-> prot(name~GALACTOACETYLTRAN_MONOMER,up!+,dw!+) + met(name~_6_Acetyl_beta_D_Galactose,loc~cyt) + met(name~CO_A,loc~cyt)    fwd_GALACTOACETYLTRAN_RXN_galactose, rvs_GALACTOACETYLTRAN_RXN_galactose
  complex_assembly_rule_0:          prot(name~BETAGALACTOSID_MONOMER,up,dw) + prot(name~BETAGALACTOSID_MONOMER,up,dw) <-> prot(name~BETAGALACTOSID_MONOMER,up!1,dw).prot(name~BETAGALACTOSID_MONOMER,up,dw!1)    fwd_complex_assembly_rule_0, rvs_complex_assembly_rule_0
  complex_assembly_rule_1:          prot(name~BETAGALACTOSID_MONOMER,up!1,dw).prot(name~BETAGALACTOSID_MONOMER,up,dw!1) + prot(name~BETAGALACTOSID_MONOMER,up!1,dw).prot(name~BETAGALACTOSID_MONOMER,up,dw!1) <-> prot(name~BETAGALACTOSID_MONOMER,up!1,dw).prot(name~BETAGALACTOSID_MONOMER,up!2,dw!1).prot(name~BETAGALACTOSID_MONOMER,up!3,dw!2).prot(name~BETAGALACTOSID_MONOMER,up,dw!3)    fwd_complex_assembly_rule_1, rvs_complex_assembly_rule_1
  complex_assembly_rule_2:          prot(name~GALACTOACETYLTRAN_MONOMER,up,dw) + prot(name~GALACTOACETYLTRAN_MONOMER,up,dw) <-> prot(name~GALACTOACETYLTRAN_MONOMER,up!1,dw).prot(name~GALACTOACETYLTRAN_MONOMER,up,dw!1)    fwd_complex_assembly_rule_2, rvs_complex_assembly_rule_2
  complex_assembly_rule_3:          prot(name~GALACTOACETYLTRAN_MONOMER,up,dw) + prot(name~GALACTOACETYLTRAN_MONOMER,up!1,dw).prot(name~GALACTOACETYLTRAN_MONOMER,up,dw!1) <-> prot(name~GALACTOACETYLTRAN_MONOMER,up!1,dw).prot(name~GALACTOACETYLTRAN_MONOMER,up!2,dw!1).prot(name~GALACTOACETYLTRAN_MONOMER,up,dw!2)    fwd_complex_assembly_rule_3, rvs_complex_assembly_rule_3
end reaction rules

end model

simulate({t_start=>0.0,n_steps=>10,t_end=>1.0,method=>"ode",print_functions=>1,verbose=>0,prefix=>"pysb0"})
