begin model
begin parameters
  fwd_PhysicalInteractionRule_01   1.000000e+00
  fwd_PhysicalInteractionRule_02   1.000000e+00
  fwd_PhysicalInteractionRule_03   1.000000e+00
  fwd_PhysicalInteractionRule_04   1.000000e+00
  fwd_PhysicalInteractionRule_05   1.000000e+00
  fwd_PhysicalInteractionRule_06   1.000000e+00
  fwd_PhysicalInteractionRule_07   1.000000e+00
  fwd_PhysicalInteractionRule_08   1.000000e+00
  fwd_PhysicalInteractionRule_09   1.000000e+00
  fwd_PhysicalInteractionRule_10   1.000000e+00
  fwd_PhysicalInteractionRule_11   1.000000e+00
  fwd_PhysicalInteractionRule_12   1.000000e+00
  fwd_docking_10_rpoD_pro1         1.000000e+00
  fwd_docking_11_rpoE_pro1         1.000000e+00
  fwd_docking_12_rpoH_pro1         1.000000e+00
  fwd_docking_13_rpoN_pro1         1.000000e+00
  fwd_docking_14_rpoA_pro1         1.000000e+00
  fwd_docking_15_rpoD_pro1         1.000000e+00
  fwd_docking_16_rpoA_pro1         1.000000e+00
  fwd_docking_17_rpoD_pro1         1.000000e+00
  fwd_docking_18_rpoH_pro1         1.000000e+00
  fwd_docking_19_fecI_pro1         1.000000e+00
  fwd_docking_1_rpoA_pro1          1.000000e+00
  fwd_docking_20_rpoA_pro1         1.000000e+00
  fwd_docking_21_rpoB_pro1         1.000000e+00
  fwd_docking_22_rpoD_pro1         1.000000e+00
  fwd_docking_23_rpoE_pro1         1.000000e+00
  fwd_docking_24_rpoH_pro1         1.000000e+00
  fwd_docking_25_rpoN_pro1         1.000000e+00
  fwd_docking_26_rpoD_pro1         1.000000e+00
  fwd_docking_27_rpoN_pro1         1.000000e+00
  fwd_docking_28_fliA_pro1         1.000000e+00
  fwd_docking_2_rpoB_pro1          1.000000e+00
  fwd_docking_3_rpoD_pro1          1.000000e+00
  fwd_docking_4_rpoE_pro1          1.000000e+00
  fwd_docking_5_rpoH_pro1          1.000000e+00
  fwd_docking_6_rpoN_pro1          1.000000e+00
  fwd_docking_7_rpoS_pro1          1.000000e+00
  fwd_docking_8_fliA_pro1          1.000000e+00
  fwd_docking_9_fecI_pro1          1.000000e+00
  fwd_sliding_10_rpoD_pro1_rbs     1.000000e+00
  fwd_sliding_11_rpoE_pro1_rbs     1.000000e+00
  fwd_sliding_12_rpoH_pro1_rbs     1.000000e+00
  fwd_sliding_13_rpoN_pro1_rbs     1.000000e+00
  fwd_sliding_14_rpoA_pro1_rbs     1.000000e+00
  fwd_sliding_15_rpoD_pro1_rbs     1.000000e+00
  fwd_sliding_16_rpoA_pro1_rbs     1.000000e+00
  fwd_sliding_17_rpoD_pro1_rbs     1.000000e+00
  fwd_sliding_18_rpoH_pro1_rbs     1.000000e+00
  fwd_sliding_19_fecI_pro1_rbs     1.000000e+00
  fwd_sliding_1_rpoA_pro1_rbs      1.000000e+00
  fwd_sliding_20_rpoA_pro1_rbs     1.000000e+00
  fwd_sliding_21_rpoB_pro1_rbs     1.000000e+00
  fwd_sliding_22_rpoD_pro1_rbs     1.000000e+00
  fwd_sliding_23_rpoE_pro1_rbs     1.000000e+00
  fwd_sliding_24_rpoH_pro1_rbs     1.000000e+00
  fwd_sliding_25_rpoN_pro1_rbs     1.000000e+00
  fwd_sliding_26_rpoD_pro1_rbs     1.000000e+00
  fwd_sliding_27_rpoN_pro1_rbs     1.000000e+00
  fwd_sliding_28_fliA_pro1_rbs     1.000000e+00
  fwd_sliding_2_rpoB_pro1_rbs      1.000000e+00
  fwd_sliding_3_rpoD_pro1_rbs      1.000000e+00
  fwd_sliding_4_rpoE_pro1_rbs      1.000000e+00
  fwd_sliding_5_rpoH_pro1_rbs      1.000000e+00
  fwd_sliding_6_rpoN_pro1_rbs      1.000000e+00
  fwd_sliding_7_rpoS_pro1_rbs      1.000000e+00
  fwd_sliding_8_fliA_pro1_rbs      1.000000e+00
  fwd_sliding_9_fecI_pro1_rbs      1.000000e+00
  fwd_sliding_fecI_cds             1.000000e+00
  fwd_sliding_fecI_ter1            1.000000e+00
  fwd_sliding_fliA_cds             1.000000e+00
  fwd_sliding_fliA_ter1            1.000000e+00
  fwd_sliding_rpoA_cds             1.000000e+00
  fwd_sliding_rpoA_ter1            1.000000e+00
  fwd_sliding_rpoB_cds             1.000000e+00
  fwd_sliding_rpoC_cds             1.000000e+00
  fwd_sliding_rpoC_rbs             1.000000e+00
  fwd_sliding_rpoC_ter1            1.000000e+00
  fwd_sliding_rpoD_cds             1.000000e+00
  fwd_sliding_rpoD_ter1            1.000000e+00
  fwd_sliding_rpoE_cds             1.000000e+00
  fwd_sliding_rpoE_ter1            1.000000e+00
  fwd_sliding_rpoH_cds             1.000000e+00
  fwd_sliding_rpoH_ter1            1.000000e+00
  fwd_sliding_rpoN_cds             1.000000e+00
  fwd_sliding_rpoN_ter1            1.000000e+00
  fwd_sliding_rpoS_cds             1.000000e+00
  fwd_sliding_rpoS_ter1            1.000000e+00
  rvs_PhysicalInteractionRule_01   1.000000e+00
  rvs_PhysicalInteractionRule_02   1.000000e+00
  rvs_PhysicalInteractionRule_03   1.000000e+00
  rvs_PhysicalInteractionRule_04   1.000000e+00
  rvs_PhysicalInteractionRule_05   1.000000e+00
  rvs_PhysicalInteractionRule_06   1.000000e+00
  rvs_PhysicalInteractionRule_07   1.000000e+00
  rvs_PhysicalInteractionRule_08   1.000000e+00
  rvs_PhysicalInteractionRule_09   1.000000e+00
  rvs_PhysicalInteractionRule_10   1.000000e+00
  rvs_PhysicalInteractionRule_11   1.000000e+00
  rvs_PhysicalInteractionRule_12   1.000000e+00
  rvs_docking_10_rpoD_pro1         0.000000e+00
  rvs_docking_11_rpoE_pro1         0.000000e+00
  rvs_docking_12_rpoH_pro1         0.000000e+00
  rvs_docking_13_rpoN_pro1         0.000000e+00
  rvs_docking_14_rpoA_pro1         0.000000e+00
  rvs_docking_15_rpoD_pro1         0.000000e+00
  rvs_docking_16_rpoA_pro1         0.000000e+00
  rvs_docking_17_rpoD_pro1         0.000000e+00
  rvs_docking_18_rpoH_pro1         0.000000e+00
  rvs_docking_19_fecI_pro1         0.000000e+00
  rvs_docking_1_rpoA_pro1          0.000000e+00
  rvs_docking_20_rpoA_pro1         0.000000e+00
  rvs_docking_21_rpoB_pro1         0.000000e+00
  rvs_docking_22_rpoD_pro1         0.000000e+00
  rvs_docking_23_rpoE_pro1         0.000000e+00
  rvs_docking_24_rpoH_pro1         0.000000e+00
  rvs_docking_25_rpoN_pro1         0.000000e+00
  rvs_docking_26_rpoD_pro1         0.000000e+00
  rvs_docking_27_rpoN_pro1         0.000000e+00
  rvs_docking_28_fliA_pro1         0.000000e+00
  rvs_docking_2_rpoB_pro1          0.000000e+00
  rvs_docking_3_rpoD_pro1          0.000000e+00
  rvs_docking_4_rpoE_pro1          0.000000e+00
  rvs_docking_5_rpoH_pro1          0.000000e+00
  rvs_docking_6_rpoN_pro1          0.000000e+00
  rvs_docking_7_rpoS_pro1          0.000000e+00
  rvs_docking_8_fliA_pro1          0.000000e+00
  rvs_docking_9_fecI_pro1          0.000000e+00
  t0_prot_fecI_cyt                 0.000000e+00
  t0_prot_fecI_ex                  0.000000e+00
  t0_prot_fecI_mem                 0.000000e+00
  t0_prot_fecI_per                 0.000000e+00
  t0_prot_fliA_cyt                 3.000000e+00
  t0_prot_fliA_ex                  0.000000e+00
  t0_prot_fliA_mem                 0.000000e+00
  t0_prot_fliA_per                 0.000000e+00
  t0_prot_rne_cyt                  0.000000e+00
  t0_prot_rne_ex                   0.000000e+00
  t0_prot_rne_mem                  0.000000e+00
  t0_prot_rne_per                  0.000000e+00
  t0_prot_rpoA_cyt                 5.600000e+01
  t0_prot_rpoA_ex                  0.000000e+00
  t0_prot_rpoA_mem                 0.000000e+00
  t0_prot_rpoA_per                 0.000000e+00
  t0_prot_rpoB_cyt                 2.800000e+01
  t0_prot_rpoB_ex                  0.000000e+00
  t0_prot_rpoB_mem                 0.000000e+00
  t0_prot_rpoB_per                 0.000000e+00
  t0_prot_rpoC_cyt                 2.800000e+01
  t0_prot_rpoC_ex                  0.000000e+00
  t0_prot_rpoC_mem                 0.000000e+00
  t0_prot_rpoC_per                 0.000000e+00
  t0_prot_rpoD_cyt                 9.000000e+00
  t0_prot_rpoD_ex                  0.000000e+00
  t0_prot_rpoD_mem                 0.000000e+00
  t0_prot_rpoD_per                 0.000000e+00
  t0_prot_rpoE_cyt                 4.000000e+00
  t0_prot_rpoE_ex                  0.000000e+00
  t0_prot_rpoE_mem                 0.000000e+00
  t0_prot_rpoE_per                 0.000000e+00
  t0_prot_rpoH_cyt                 2.000000e+00
  t0_prot_rpoH_ex                  0.000000e+00
  t0_prot_rpoH_mem                 0.000000e+00
  t0_prot_rpoH_per                 0.000000e+00
  t0_prot_rpoN_cyt                 3.000000e+00
  t0_prot_rpoN_ex                  0.000000e+00
  t0_prot_rpoN_mem                 0.000000e+00
  t0_prot_rpoN_per                 0.000000e+00
  t0_prot_rpoS_cyt                 7.000000e+00
  t0_prot_rpoS_ex                  0.000000e+00
  t0_prot_rpoS_mem                 0.000000e+00
  t0_prot_rpoS_per                 0.000000e+00
  t0_rpoA_operon                   1.000000e+00
  t0_rpoBC_operon                  1.000000e+00
  t0_rpoD_operon                   1.000000e+00
  t0_rpoE_operon                   1.000000e+00
  t0_rpoH_operon                   1.000000e+00
  t0_rpoN_operon                   1.000000e+00
  t0_rpoS_operon                   1.000000e+00
  t0_fliA_operon                   1.000000e+00
  t0_fecI_operon                   1.000000e+00
end parameters

begin molecule types
  rna(name~fecI~fliA~rpoA~rpoB~rpoC~rpoD~rpoE~rpoH~rpoN~rpoS,type~BS~cds~pro1~rbs~ter1,prot,rna)
  dna(name~fecI~fliA~rpoA~rpoB~rpoC~rpoD~rpoE~rpoH~rpoN~rpoS,type~BS~cds~pro1~rbs~ter1,prot,rna,up,dw)
  cplx(name~RNAP~Ribosome,loc~cyt~mem~per~ex,dna,prot,rna)
  prot(dna,dw,loc~cyt~ex~mem~per,met,name~fecI~fliA~rne~rpoA~rpoB~rpoC~rpoD~rpoE~rpoH~rpoN~rpoS,prot,rna,up)
end molecule types

begin observables
  Molecules obs_prot_fecI_cyt     prot(dna,dw,loc~cyt,met,name~fecI,prot,rna,up)
  Molecules obs_prot_fecI_ex      prot(dna,dw,loc~ex,met,name~fecI,prot,rna,up)
  Molecules obs_prot_fecI_per     prot(dna,dw,loc~per,met,name~fecI,prot,rna,up)
  Molecules obs_prot_fliA_cyt     prot(dna,dw,loc~cyt,met,name~fliA,prot,rna,up)
  Molecules obs_prot_fliA_ex      prot(dna,dw,loc~ex,met,name~fliA,prot,rna,up)
  Molecules obs_prot_fliA_per     prot(dna,dw,loc~per,met,name~fliA,prot,rna,up)
  Molecules obs_prot_rne_cyt      prot(dna,dw,loc~cyt,met,name~rne,prot,rna,up)
  Molecules obs_prot_rne_ex       prot(dna,dw,loc~ex,met,name~rne,prot,rna,up)
  Molecules obs_prot_rne_per      prot(dna,dw,loc~per,met,name~rne,prot,rna,up)
  Molecules obs_prot_rpoA_cyt     prot(dna,dw,loc~cyt,met,name~rpoA,prot,rna,up)
  Molecules obs_prot_rpoA_ex      prot(dna,dw,loc~ex,met,name~rpoA,prot,rna,up)
  Molecules obs_prot_rpoA_per     prot(dna,dw,loc~per,met,name~rpoA,prot,rna,up)
  Molecules obs_prot_rpoB_cyt     prot(dna,dw,loc~cyt,met,name~rpoB,prot,rna,up)
  Molecules obs_prot_rpoB_ex      prot(dna,dw,loc~ex,met,name~rpoB,prot,rna,up)
  Molecules obs_prot_rpoB_per     prot(dna,dw,loc~per,met,name~rpoB,prot,rna,up)
  Molecules obs_prot_rpoC_cyt     prot(dna,dw,loc~cyt,met,name~rpoC,prot,rna,up)
  Molecules obs_prot_rpoC_ex      prot(dna,dw,loc~ex,met,name~rpoC,prot,rna,up)
  Molecules obs_prot_rpoC_per     prot(dna,dw,loc~per,met,name~rpoC,prot,rna,up)
  Molecules obs_prot_rpoD_cyt     prot(dna,dw,loc~cyt,met,name~rpoD,prot,rna,up)
  Molecules obs_prot_rpoD_ex      prot(dna,dw,loc~ex,met,name~rpoD,prot,rna,up)
  Molecules obs_prot_rpoD_per     prot(dna,dw,loc~per,met,name~rpoD,prot,rna,up)
  Molecules obs_prot_rpoE_cyt     prot(dna,dw,loc~cyt,met,name~rpoE,prot,rna,up)
  Molecules obs_prot_rpoE_ex      prot(dna,dw,loc~ex,met,name~rpoE,prot,rna,up)
  Molecules obs_prot_rpoE_per     prot(dna,dw,loc~per,met,name~rpoE,prot,rna,up)
  Molecules obs_prot_rpoH_cyt     prot(dna,dw,loc~cyt,met,name~rpoH,prot,rna,up)
  Molecules obs_prot_rpoH_ex      prot(dna,dw,loc~ex,met,name~rpoH,prot,rna,up)
  Molecules obs_prot_rpoH_per     prot(dna,dw,loc~per,met,name~rpoH,prot,rna,up)
  Molecules obs_prot_rpoN_cyt     prot(dna,dw,loc~cyt,met,name~rpoN,prot,rna,up)
  Molecules obs_prot_rpoN_ex      prot(dna,dw,loc~ex,met,name~rpoN,prot,rna,up)
  Molecules obs_prot_rpoN_per     prot(dna,dw,loc~per,met,name~rpoN,prot,rna,up)
  Molecules obs_prot_rpoS_cyt     prot(dna,dw,loc~cyt,met,name~rpoS,prot,rna,up)
  Molecules obs_prot_rpoS_ex      prot(dna,dw,loc~ex,met,name~rpoS,prot,rna,up)
  Molecules obs_prot_rpoS_per     prot(dna,dw,loc~per,met,name~rpoS,prot,rna,up)
  Molecules obs_rpoA_total_prot   prot(name~rpoA)
  Molecules obs_rpoB_total_prot   prot(name~rpoB)
  Molecules obs_rpoC_total_prot   prot(name~rpoC)
  Molecules obs_rpoD_total_prot   prot(name~rpoD)
  Molecules obs_rpoE_total_prot   prot(name~rpoE)
  Molecules obs_rpoH_total_prot   prot(name~rpoH)
  Molecules obs_rpoN_total_prot   prot(name~rpoN)
  Molecules obs_rpoS_total_prot   prot(name~rpoS)
  Molecules obs_fliA_total_prot   prot(name~fliA)
  Molecules obs_fecI_total_prot   prot(name~fecI)
  Molecules obs_rpoA_free_prot    prot(dw,name~rpoA,up)
  Molecules obs_rpoB_free_prot    prot(dw,name~rpoB,up)
  Molecules obs_rpoC_free_prot    prot(dw,name~rpoC,up)
  Molecules obs_rpoD_free_prot    prot(dw,name~rpoD,up)
  Molecules obs_rpoE_free_prot    prot(dw,name~rpoE,up)
  Molecules obs_rpoH_free_prot    prot(dw,name~rpoH,up)
  Molecules obs_rpoN_free_prot    prot(dw,name~rpoN,up)
  Molecules obs_rpoS_free_prot    prot(dw,name~rpoS,up)
  Molecules obs_fliA_free_prot    prot(dw,name~fliA,up)
  Molecules obs_fecI_free_prot    prot(dw,name~fecI,up)
  Molecules obs_rna_rpoA          rna(name~rpoA,type~cds,prot)
  Molecules obs_rna_rpoB          rna(name~rpoB,type~cds,prot)
  Molecules obs_rna_rpoC          rna(name~rpoC,type~cds,prot)
  Molecules obs_rna_rpoD          rna(name~rpoD,type~cds,prot)
  Molecules obs_rna_rpoE          rna(name~rpoE,type~cds,prot)
  Molecules obs_rna_rpoH          rna(name~rpoH,type~cds,prot)
  Molecules obs_rna_rpoN          rna(name~rpoN,type~cds,prot)
  Molecules obs_rna_rpoS          rna(name~rpoS,type~cds,prot)
  Molecules obs_rna_fliA          rna(name~fliA,type~cds,prot)
  Molecules obs_rna_fecI          rna(name~fecI,type~cds,prot)
end observables

begin species
  prot(dna,dw,loc~cyt,met,name~fecI,prot,rna,up)                                                                                                                                                                                                                    t0_prot_fecI_cyt
  prot(dna,dw,loc~ex,met,name~fecI,prot,rna,up)                                                                                                                                                                                                                     t0_prot_fecI_ex
  prot(dna,dw,loc~mem,met,name~fecI,prot,rna,up)                                                                                                                                                                                                                    t0_prot_fecI_mem
  prot(dna,dw,loc~per,met,name~fecI,prot,rna,up)                                                                                                                                                                                                                    t0_prot_fecI_per
  prot(dna,dw,loc~cyt,met,name~fliA,prot,rna,up)                                                                                                                                                                                                                    t0_prot_fliA_cyt
  prot(dna,dw,loc~ex,met,name~fliA,prot,rna,up)                                                                                                                                                                                                                     t0_prot_fliA_ex
  prot(dna,dw,loc~mem,met,name~fliA,prot,rna,up)                                                                                                                                                                                                                    t0_prot_fliA_mem
  prot(dna,dw,loc~per,met,name~fliA,prot,rna,up)                                                                                                                                                                                                                    t0_prot_fliA_per
  prot(dna,dw,loc~cyt,met,name~rne,prot,rna,up)                                                                                                                                                                                                                     t0_prot_rne_cyt
  prot(dna,dw,loc~ex,met,name~rne,prot,rna,up)                                                                                                                                                                                                                      t0_prot_rne_ex
  prot(dna,dw,loc~mem,met,name~rne,prot,rna,up)                                                                                                                                                                                                                     t0_prot_rne_mem
  prot(dna,dw,loc~per,met,name~rne,prot,rna,up)                                                                                                                                                                                                                     t0_prot_rne_per
  prot(dna,dw,loc~cyt,met,name~rpoA,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoA_cyt
  prot(dna,dw,loc~ex,met,name~rpoA,prot,rna,up)                                                                                                                                                                                                                     t0_prot_rpoA_ex
  prot(dna,dw,loc~mem,met,name~rpoA,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoA_mem
  prot(dna,dw,loc~per,met,name~rpoA,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoA_per
  prot(dna,dw,loc~cyt,met,name~rpoB,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoB_cyt
  prot(dna,dw,loc~ex,met,name~rpoB,prot,rna,up)                                                                                                                                                                                                                     t0_prot_rpoB_ex
  prot(dna,dw,loc~mem,met,name~rpoB,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoB_mem
  prot(dna,dw,loc~per,met,name~rpoB,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoB_per
  prot(dna,dw,loc~cyt,met,name~rpoC,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoC_cyt
  prot(dna,dw,loc~ex,met,name~rpoC,prot,rna,up)                                                                                                                                                                                                                     t0_prot_rpoC_ex
  prot(dna,dw,loc~mem,met,name~rpoC,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoC_mem
  prot(dna,dw,loc~per,met,name~rpoC,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoC_per
  prot(dna,dw,loc~cyt,met,name~rpoD,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoD_cyt
  prot(dna,dw,loc~ex,met,name~rpoD,prot,rna,up)                                                                                                                                                                                                                     t0_prot_rpoD_ex
  prot(dna,dw,loc~mem,met,name~rpoD,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoD_mem
  prot(dna,dw,loc~per,met,name~rpoD,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoD_per
  prot(dna,dw,loc~cyt,met,name~rpoE,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoE_cyt
  prot(dna,dw,loc~ex,met,name~rpoE,prot,rna,up)                                                                                                                                                                                                                     t0_prot_rpoE_ex
  prot(dna,dw,loc~mem,met,name~rpoE,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoE_mem
  prot(dna,dw,loc~per,met,name~rpoE,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoE_per
  prot(dna,dw,loc~cyt,met,name~rpoH,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoH_cyt
  prot(dna,dw,loc~ex,met,name~rpoH,prot,rna,up)                                                                                                                                                                                                                     t0_prot_rpoH_ex
  prot(dna,dw,loc~mem,met,name~rpoH,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoH_mem
  prot(dna,dw,loc~per,met,name~rpoH,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoH_per
  prot(dna,dw,loc~cyt,met,name~rpoN,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoN_cyt
  prot(dna,dw,loc~ex,met,name~rpoN,prot,rna,up)                                                                                                                                                                                                                     t0_prot_rpoN_ex
  prot(dna,dw,loc~mem,met,name~rpoN,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoN_mem
  prot(dna,dw,loc~per,met,name~rpoN,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoN_per
  prot(dna,dw,loc~cyt,met,name~rpoS,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoS_cyt
  prot(dna,dw,loc~ex,met,name~rpoS,prot,rna,up)                                                                                                                                                                                                                     t0_prot_rpoS_ex
  prot(dna,dw,loc~mem,met,name~rpoS,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoS_mem
  prot(dna,dw,loc~per,met,name~rpoS,prot,rna,up)                                                                                                                                                                                                                    t0_prot_rpoS_per
  dna(name~rpoA,type~pro1,prot,rna,up,dw!1).dna(name~rpoA,type~rbs,prot,rna,up!1,dw!2).dna(name~rpoA,type~cds,prot,rna,up!2,dw!3).dna(name~rpoA,type~ter1,prot,rna,up!3,dw)                                                                                         t0_rpoA_operon
  dna(name~rpoB,type~pro1,prot,rna,up,dw!1).dna(name~rpoB,type~rbs,prot,rna,up!1,dw!2).dna(name~rpoB,type~cds,prot,rna,up!2,dw!3).dna(name~rpoC,type~rbs,prot,rna,up!3,dw!4).dna(name~rpoC,type~cds,prot,rna,up!4,dw!5).dna(name~rpoC,type~ter1,prot,rna,up!5,dw)   t0_rpoBC_operon
  dna(name~rpoD,type~pro1,prot,rna,up,dw!1).dna(name~rpoD,type~rbs,prot,rna,up!1,dw!2).dna(name~rpoD,type~cds,prot,rna,up!2,dw!3).dna(name~rpoD,type~ter1,prot,rna,up!3,dw)                                                                                         t0_rpoD_operon
  dna(name~rpoE,type~pro1,prot,rna,up,dw!1).dna(name~rpoE,type~rbs,prot,rna,up!1,dw!2).dna(name~rpoE,type~cds,prot,rna,up!2,dw!3).dna(name~rpoE,type~ter1,prot,rna,up!3,dw)                                                                                         t0_rpoE_operon
  dna(name~rpoH,type~pro1,prot,rna,up,dw!1).dna(name~rpoH,type~rbs,prot,rna,up!1,dw!2).dna(name~rpoH,type~cds,prot,rna,up!2,dw!3).dna(name~rpoH,type~ter1,prot,rna,up!3,dw)                                                                                         t0_rpoH_operon
  dna(name~rpoN,type~pro1,prot,rna,up,dw!1).dna(name~rpoN,type~rbs,prot,rna,up!1,dw!2).dna(name~rpoN,type~cds,prot,rna,up!2,dw!3).dna(name~rpoN,type~ter1,prot,rna,up!3,dw)                                                                                         t0_rpoN_operon
  dna(name~rpoS,type~pro1,prot,rna,up,dw!1).dna(name~rpoS,type~rbs,prot,rna,up!1,dw!2).dna(name~rpoS,type~cds,prot,rna,up!2,dw!3).dna(name~rpoS,type~ter1,prot,rna,up!3,dw)                                                                                         t0_rpoS_operon
  dna(name~fliA,type~pro1,prot,rna,up,dw!1).dna(name~fliA,type~rbs,prot,rna,up!1,dw!2).dna(name~fliA,type~cds,prot,rna,up!2,dw!3).dna(name~fliA,type~ter1,prot,rna,up!3,dw)                                                                                         t0_fliA_operon
  dna(name~fecI,type~pro1,prot,rna,up,dw!1).dna(name~fecI,type~rbs,prot,rna,up!1,dw!2).dna(name~fecI,type~cds,prot,rna,up!2,dw!3).dna(name~fecI,type~ter1,prot,rna,up!3,dw)                                                                                         t0_fecI_operon
end species

begin reaction rules
  PhysicalInteractionRule_01:  prot(dw,name~rpoA,up) + prot(dw,name~rpoA,up) <-> prot(dw!1,name~rpoA,up).prot(dw,name~rpoA,up!1)    fwd_PhysicalInteractionRule_01, rvs_PhysicalInteractionRule_01
  PhysicalInteractionRule_02:  prot(dw!1,name~rpoA,up).prot(dw,name~rpoA,up!1) + prot(dw,name~rpoB,up) <-> prot(dw!1,name~rpoA,up).prot(dw!2,name~rpoA,up!1).prot(dw,name~rpoB,up!2)    fwd_PhysicalInteractionRule_02, rvs_PhysicalInteractionRule_02
  PhysicalInteractionRule_03:  prot(dw!1,name~rpoA,up).prot(dw!2,name~rpoA,up!1).prot(dw,name~rpoB,up!2) + prot(dw,name~rpoC,up) <-> prot(dw!1,name~rpoA,up).prot(dw!2,name~rpoA,up!1).prot(dw!3,name~rpoB,up!2).prot(dw,name~rpoC,up!3)    fwd_PhysicalInteractionRule_03, rvs_PhysicalInteractionRule_03
  PhysicalInteractionRule_04:  prot(dw!1,name~rpoA,up).prot(dw!2,name~rpoA,up!1).prot(dw!3,name~rpoB,up!2).prot(dw,name~rpoC,up!3) + prot(dw,name~rpoD,up) <-> prot(dw!1,name~rpoA,up).prot(dw!2,name~rpoA,up!1).prot(dw!3,name~rpoB,up!2).prot(dw!4,name~rpoC,up!3).prot(dw,name~rpoD,up!4)    fwd_PhysicalInteractionRule_04, rvs_PhysicalInteractionRule_04
  PhysicalInteractionRule_05:  prot(dw!1,name~rpoA,up).prot(dw!2,name~rpoA,up!1).prot(dw!3,name~rpoB,up!2).prot(dw,name~rpoC,up!3) + prot(dw,name~rpoE,up) <-> prot(dw!1,name~rpoA,up).prot(dw!2,name~rpoA,up!1).prot(dw!3,name~rpoB,up!2).prot(dw!4,name~rpoC,up!3).prot(dw,name~rpoE,up!4)    fwd_PhysicalInteractionRule_05, rvs_PhysicalInteractionRule_05
  PhysicalInteractionRule_06:  prot(dw!1,name~rpoA,up).prot(dw!2,name~rpoA,up!1).prot(dw!3,name~rpoB,up!2).prot(dw,name~rpoC,up!3) + prot(dw,name~rpoH,up) <-> prot(dw!1,name~rpoA,up).prot(dw!2,name~rpoA,up!1).prot(dw!3,name~rpoB,up!2).prot(dw!4,name~rpoC,up!3).prot(dw,name~rpoH,up!4)    fwd_PhysicalInteractionRule_06, rvs_PhysicalInteractionRule_06
  PhysicalInteractionRule_07:  prot(dw!1,name~rpoA,up).prot(dw!2,name~rpoA,up!1).prot(dw!3,name~rpoB,up!2).prot(dw,name~rpoC,up!3) + prot(dw,name~rpoN,up) <-> prot(dw!1,name~rpoA,up).prot(dw!2,name~rpoA,up!1).prot(dw!3,name~rpoB,up!2).prot(dw!4,name~rpoC,up!3).prot(dw,name~rpoN,up!4)    fwd_PhysicalInteractionRule_07, rvs_PhysicalInteractionRule_07
  PhysicalInteractionRule_08:  prot(dw!1,name~rpoA,up).prot(dw!2,name~rpoA,up!1).prot(dw!3,name~rpoB,up!2).prot(dw,name~rpoC,up!3) + prot(dw,name~rpoS,up) <-> prot(dw!1,name~rpoA,up).prot(dw!2,name~rpoA,up!1).prot(dw!3,name~rpoB,up!2).prot(dw!4,name~rpoC,up!3).prot(dw,name~rpoS,up!4)    fwd_PhysicalInteractionRule_08, rvs_PhysicalInteractionRule_08
  PhysicalInteractionRule_09:  prot(dw!1,name~rpoA,up).prot(dw!2,name~rpoA,up!1).prot(dw!3,name~rpoB,up!2).prot(dw,name~rpoC,up!3) + prot(dw,name~fliA,up) <-> prot(dw!1,name~rpoA,up).prot(dw!2,name~rpoA,up!1).prot(dw!3,name~rpoB,up!2).prot(dw!4,name~rpoC,up!3).prot(dw,name~fliA,up!4)    fwd_PhysicalInteractionRule_09, rvs_PhysicalInteractionRule_09
  PhysicalInteractionRule_10:  prot(dw!1,name~rpoA,up).prot(dw!2,name~rpoA,up!1).prot(dw!3,name~rpoB,up!2).prot(dw,name~rpoC,up!3) + prot(dw,name~fecI,up) <-> prot(dw!1,name~rpoA,up).prot(dw!2,name~rpoA,up!1).prot(dw!3,name~rpoB,up!2).prot(dw!4,name~rpoC,up!3).prot(dw,name~fecI,up!4)    fwd_PhysicalInteractionRule_10, rvs_PhysicalInteractionRule_10
  PhysicalInteractionRule_11:  prot(dw,name~rne,up) + prot(dw,name~rne,up) <-> prot(dw!1,name~rne,up).prot(dw,name~rne,up!1)    fwd_PhysicalInteractionRule_11, rvs_PhysicalInteractionRule_11
  PhysicalInteractionRule_12:  prot(dw!2,name~rne,up).prot(dw,name~rne,up!2) + prot(dw!1,name~rne,up).prot(dw,name~rne,up!1) <-> prot(dw!1,name~rne,up).prot(dw!2,name~rne,up!1).prot(dw!3,name~rne,up!2).prot(dw,name~rne,up!3)    fwd_PhysicalInteractionRule_12, rvs_PhysicalInteractionRule_12
  docking_10_rpoD_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoE,up!4) + dna(name~rpoD,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoE,up!4).dna(name~rpoD,type~pro1,prot!5,up!?,dw!?)    fwd_docking_10_rpoD_pro1, rvs_docking_10_rpoD_pro1
  docking_11_rpoE_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoE,up!4) + dna(name~rpoE,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoE,up!4).dna(name~rpoE,type~pro1,prot!5,up!?,dw!?)    fwd_docking_11_rpoE_pro1, rvs_docking_11_rpoE_pro1
  docking_12_rpoH_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoE,up!4) + dna(name~rpoH,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoE,up!4).dna(name~rpoH,type~pro1,prot!5,up!?,dw!?)    fwd_docking_12_rpoH_pro1, rvs_docking_12_rpoH_pro1
  docking_13_rpoN_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoE,up!4) + dna(name~rpoN,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoE,up!4).dna(name~rpoN,type~pro1,prot!5,up!?,dw!?)    fwd_docking_13_rpoN_pro1, rvs_docking_13_rpoN_pro1
  docking_14_rpoA_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoH,up!4) + dna(name~rpoA,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoH,up!4).dna(name~rpoA,type~pro1,prot!5,up!?,dw!?)    fwd_docking_14_rpoA_pro1, rvs_docking_14_rpoA_pro1
  docking_15_rpoD_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoH,up!4) + dna(name~rpoD,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoH,up!4).dna(name~rpoD,type~pro1,prot!5,up!?,dw!?)    fwd_docking_15_rpoD_pro1, rvs_docking_15_rpoD_pro1
  docking_16_rpoA_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoN,up!4) + dna(name~rpoA,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoN,up!4).dna(name~rpoA,type~pro1,prot!5,up!?,dw!?)    fwd_docking_16_rpoA_pro1, rvs_docking_16_rpoA_pro1
  docking_17_rpoD_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoN,up!4) + dna(name~rpoD,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoN,up!4).dna(name~rpoD,type~pro1,prot!5,up!?,dw!?)    fwd_docking_17_rpoD_pro1, rvs_docking_17_rpoD_pro1
  docking_18_rpoH_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoN,up!4) + dna(name~rpoH,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoN,up!4).dna(name~rpoH,type~pro1,prot!5,up!?,dw!?)    fwd_docking_18_rpoH_pro1, rvs_docking_18_rpoH_pro1
  docking_19_fecI_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoS,up!4) + dna(name~fecI,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoS,up!4).dna(name~fecI,type~pro1,prot!5,up!?,dw!?)    fwd_docking_19_fecI_pro1, rvs_docking_19_fecI_pro1
  docking_1_rpoA_pro1:         prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoD,up!4) + dna(name~rpoA,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoD,up!4).dna(name~rpoA,type~pro1,prot!5,up!?,dw!?)    fwd_docking_1_rpoA_pro1, rvs_docking_1_rpoA_pro1
  docking_20_rpoA_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoS,up!4) + dna(name~rpoA,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoS,up!4).dna(name~rpoA,type~pro1,prot!5,up!?,dw!?)    fwd_docking_20_rpoA_pro1, rvs_docking_20_rpoA_pro1
  docking_21_rpoB_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoS,up!4) + dna(name~rpoB,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoS,up!4).dna(name~rpoB,type~pro1,prot!5,up!?,dw!?)    fwd_docking_21_rpoB_pro1, rvs_docking_21_rpoB_pro1
  docking_22_rpoD_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoS,up!4) + dna(name~rpoD,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoS,up!4).dna(name~rpoD,type~pro1,prot!5,up!?,dw!?)    fwd_docking_22_rpoD_pro1, rvs_docking_22_rpoD_pro1
  docking_23_rpoE_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoS,up!4) + dna(name~rpoE,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoS,up!4).dna(name~rpoE,type~pro1,prot!5,up!?,dw!?)    fwd_docking_23_rpoE_pro1, rvs_docking_23_rpoE_pro1
  docking_24_rpoH_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoS,up!4) + dna(name~rpoH,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoS,up!4).dna(name~rpoH,type~pro1,prot!5,up!?,dw!?)    fwd_docking_24_rpoH_pro1, rvs_docking_24_rpoH_pro1
  docking_25_rpoN_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoS,up!4) + dna(name~rpoN,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoS,up!4).dna(name~rpoN,type~pro1,prot!5,up!?,dw!?)    fwd_docking_25_rpoN_pro1, rvs_docking_25_rpoN_pro1
  docking_26_rpoD_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~fliA,up!4) + dna(name~rpoD,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~fliA,up!4).dna(name~rpoD,type~pro1,prot!5,up!?,dw!?)    fwd_docking_26_rpoD_pro1, rvs_docking_26_rpoD_pro1
  docking_27_rpoN_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~fliA,up!4) + dna(name~rpoN,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~fliA,up!4).dna(name~rpoN,type~pro1,prot!5,up!?,dw!?)    fwd_docking_27_rpoN_pro1, rvs_docking_27_rpoN_pro1
  docking_28_fliA_pro1:        prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~fliA,up!4) + dna(name~fliA,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~fliA,up!4).dna(name~fliA,type~pro1,prot!5,up!?,dw!?)    fwd_docking_28_fliA_pro1, rvs_docking_28_fliA_pro1
  docking_2_rpoB_pro1:         prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoD,up!4) + dna(name~rpoB,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoD,up!4).dna(name~rpoB,type~pro1,prot!5,up!?,dw!?)    fwd_docking_2_rpoB_pro1, rvs_docking_2_rpoB_pro1
  docking_3_rpoD_pro1:         prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoD,up!4) + dna(name~rpoD,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoD,up!4).dna(name~rpoD,type~pro1,prot!5,up!?,dw!?)    fwd_docking_3_rpoD_pro1, rvs_docking_3_rpoD_pro1
  docking_4_rpoE_pro1:         prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoD,up!4) + dna(name~rpoE,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoD,up!4).dna(name~rpoE,type~pro1,prot!5,up!?,dw!?)    fwd_docking_4_rpoE_pro1, rvs_docking_4_rpoE_pro1
  docking_5_rpoH_pro1:         prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoD,up!4) + dna(name~rpoH,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoD,up!4).dna(name~rpoH,type~pro1,prot!5,up!?,dw!?)    fwd_docking_5_rpoH_pro1, rvs_docking_5_rpoH_pro1
  docking_6_rpoN_pro1:         prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoD,up!4) + dna(name~rpoN,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoD,up!4).dna(name~rpoN,type~pro1,prot!5,up!?,dw!?)    fwd_docking_6_rpoN_pro1, rvs_docking_6_rpoN_pro1
  docking_7_rpoS_pro1:         prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoD,up!4) + dna(name~rpoS,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoD,up!4).dna(name~rpoS,type~pro1,prot!5,up!?,dw!?)    fwd_docking_7_rpoS_pro1, rvs_docking_7_rpoS_pro1
  docking_8_fliA_pro1:         prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoD,up!4) + dna(name~fliA,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoD,up!4).dna(name~fliA,type~pro1,prot!5,up!?,dw!?)    fwd_docking_8_fliA_pro1, rvs_docking_8_fliA_pro1
  docking_9_fecI_pro1:         prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoD,up!4) + dna(name~fecI,type~pro1,prot,up!?,dw!?) <-> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoD,up!4).dna(name~fecI,type~pro1,prot!5,up!?,dw!?)    fwd_docking_9_fecI_pro1, rvs_docking_9_fecI_pro1
  sliding_10_rpoD_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoE,up!4).dna(name~rpoD,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoD,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoE,up).dna(name~rpoD,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoD,type~pro1,prot,up!?,dw!?) + rna(name~rpoD,type~rbs,prot)    fwd_sliding_10_rpoD_pro1_rbs
  sliding_11_rpoE_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoE,up!4).dna(name~rpoE,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoE,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoE,up).dna(name~rpoE,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoE,type~pro1,prot,up!?,dw!?) + rna(name~rpoE,type~rbs,prot)    fwd_sliding_11_rpoE_pro1_rbs
  sliding_12_rpoH_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoE,up!4).dna(name~rpoH,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoH,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoE,up).dna(name~rpoH,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoH,type~pro1,prot,up!?,dw!?) + rna(name~rpoH,type~rbs,prot)    fwd_sliding_12_rpoH_pro1_rbs
  sliding_13_rpoN_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoE,up!4).dna(name~rpoN,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoN,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoE,up).dna(name~rpoN,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoN,type~pro1,prot,up!?,dw!?) + rna(name~rpoN,type~rbs,prot)    fwd_sliding_13_rpoN_pro1_rbs
  sliding_14_rpoA_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoH,up!4).dna(name~rpoA,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoA,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoH,up).dna(name~rpoA,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoA,type~pro1,prot,up!?,dw!?) + rna(name~rpoA,type~rbs,prot)    fwd_sliding_14_rpoA_pro1_rbs
  sliding_15_rpoD_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoH,up!4).dna(name~rpoD,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoD,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoH,up).dna(name~rpoD,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoD,type~pro1,prot,up!?,dw!?) + rna(name~rpoD,type~rbs,prot)    fwd_sliding_15_rpoD_pro1_rbs
  sliding_16_rpoA_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoN,up!4).dna(name~rpoA,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoA,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoN,up).dna(name~rpoA,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoA,type~pro1,prot,up!?,dw!?) + rna(name~rpoA,type~rbs,prot)    fwd_sliding_16_rpoA_pro1_rbs
  sliding_17_rpoD_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoN,up!4).dna(name~rpoD,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoD,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoN,up).dna(name~rpoD,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoD,type~pro1,prot,up!?,dw!?) + rna(name~rpoD,type~rbs,prot)    fwd_sliding_17_rpoD_pro1_rbs
  sliding_18_rpoH_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoN,up!4).dna(name~rpoH,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoH,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoN,up).dna(name~rpoH,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoH,type~pro1,prot,up!?,dw!?) + rna(name~rpoH,type~rbs,prot)    fwd_sliding_18_rpoH_pro1_rbs
  sliding_19_fecI_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoS,up!4).dna(name~fecI,type~pro1,prot!5,up!?,dw!?) + dna(name~fecI,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoS,up).dna(name~fecI,type~rbs,prot!4,up!?,dw!?) + dna(name~fecI,type~pro1,prot,up!?,dw!?) + rna(name~fecI,type~rbs,prot)    fwd_sliding_19_fecI_pro1_rbs
  sliding_1_rpoA_pro1_rbs:     prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoD,up!4).dna(name~rpoA,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoA,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoD,up).dna(name~rpoA,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoA,type~pro1,prot,up!?,dw!?) + rna(name~rpoA,type~rbs,prot)    fwd_sliding_1_rpoA_pro1_rbs
  sliding_20_rpoA_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoS,up!4).dna(name~rpoA,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoA,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoS,up).dna(name~rpoA,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoA,type~pro1,prot,up!?,dw!?) + rna(name~rpoA,type~rbs,prot)    fwd_sliding_20_rpoA_pro1_rbs
  sliding_21_rpoB_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoS,up!4).dna(name~rpoB,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoB,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoS,up).dna(name~rpoB,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoB,type~pro1,prot,up!?,dw!?) + rna(name~rpoB,type~rbs,prot)    fwd_sliding_21_rpoB_pro1_rbs
  sliding_22_rpoD_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoS,up!4).dna(name~rpoD,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoD,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoS,up).dna(name~rpoD,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoD,type~pro1,prot,up!?,dw!?) + rna(name~rpoD,type~rbs,prot)    fwd_sliding_22_rpoD_pro1_rbs
  sliding_23_rpoE_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoS,up!4).dna(name~rpoE,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoE,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoS,up).dna(name~rpoE,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoE,type~pro1,prot,up!?,dw!?) + rna(name~rpoE,type~rbs,prot)    fwd_sliding_23_rpoE_pro1_rbs
  sliding_24_rpoH_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoS,up!4).dna(name~rpoH,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoH,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoS,up).dna(name~rpoH,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoH,type~pro1,prot,up!?,dw!?) + rna(name~rpoH,type~rbs,prot)    fwd_sliding_24_rpoH_pro1_rbs
  sliding_25_rpoN_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoS,up!4).dna(name~rpoN,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoN,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoS,up).dna(name~rpoN,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoN,type~pro1,prot,up!?,dw!?) + rna(name~rpoN,type~rbs,prot)    fwd_sliding_25_rpoN_pro1_rbs
  sliding_26_rpoD_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~fliA,up!4).dna(name~rpoD,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoD,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~fliA,up).dna(name~rpoD,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoD,type~pro1,prot,up!?,dw!?) + rna(name~rpoD,type~rbs,prot)    fwd_sliding_26_rpoD_pro1_rbs
  sliding_27_rpoN_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~fliA,up!4).dna(name~rpoN,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoN,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~fliA,up).dna(name~rpoN,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoN,type~pro1,prot,up!?,dw!?) + rna(name~rpoN,type~rbs,prot)    fwd_sliding_27_rpoN_pro1_rbs
  sliding_28_fliA_pro1_rbs:    prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~fliA,up!4).dna(name~fliA,type~pro1,prot!5,up!?,dw!?) + dna(name~fliA,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~fliA,up).dna(name~fliA,type~rbs,prot!4,up!?,dw!?) + dna(name~fliA,type~pro1,prot,up!?,dw!?) + rna(name~fliA,type~rbs,prot)    fwd_sliding_28_fliA_pro1_rbs
  sliding_2_rpoB_pro1_rbs:     prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoD,up!4).dna(name~rpoB,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoB,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoD,up).dna(name~rpoB,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoB,type~pro1,prot,up!?,dw!?) + rna(name~rpoB,type~rbs,prot)    fwd_sliding_2_rpoB_pro1_rbs
  sliding_3_rpoD_pro1_rbs:     prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoD,up!4).dna(name~rpoD,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoD,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoD,up).dna(name~rpoD,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoD,type~pro1,prot,up!?,dw!?) + rna(name~rpoD,type~rbs,prot)    fwd_sliding_3_rpoD_pro1_rbs
  sliding_4_rpoE_pro1_rbs:     prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoD,up!4).dna(name~rpoE,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoE,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoD,up).dna(name~rpoE,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoE,type~pro1,prot,up!?,dw!?) + rna(name~rpoE,type~rbs,prot)    fwd_sliding_4_rpoE_pro1_rbs
  sliding_5_rpoH_pro1_rbs:     prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoD,up!4).dna(name~rpoH,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoH,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoD,up).dna(name~rpoH,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoH,type~pro1,prot,up!?,dw!?) + rna(name~rpoH,type~rbs,prot)    fwd_sliding_5_rpoH_pro1_rbs
  sliding_6_rpoN_pro1_rbs:     prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoD,up!4).dna(name~rpoN,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoN,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoD,up).dna(name~rpoN,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoN,type~pro1,prot,up!?,dw!?) + rna(name~rpoN,type~rbs,prot)    fwd_sliding_6_rpoN_pro1_rbs
  sliding_7_rpoS_pro1_rbs:     prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoD,up!4).dna(name~rpoS,type~pro1,prot!5,up!?,dw!?) + dna(name~rpoS,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoD,up).dna(name~rpoS,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoS,type~pro1,prot,up!?,dw!?) + rna(name~rpoS,type~rbs,prot)    fwd_sliding_7_rpoS_pro1_rbs
  sliding_8_fliA_pro1_rbs:     prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoD,up!4).dna(name~fliA,type~pro1,prot!5,up!?,dw!?) + dna(name~fliA,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoD,up).dna(name~fliA,type~rbs,prot!4,up!?,dw!?) + dna(name~fliA,type~pro1,prot,up!?,dw!?) + rna(name~fliA,type~rbs,prot)    fwd_sliding_8_fliA_pro1_rbs
  sliding_9_fecI_pro1_rbs:     prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna,dw!4,met,name~rpoC,up!3).prot(dna!5,dw,met,name~rpoD,up!4).dna(name~fecI,type~pro1,prot!5,up!?,dw!?) + dna(name~fecI,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).prot(dna,dw,met,name~rpoD,up).dna(name~fecI,type~rbs,prot!4,up!?,dw!?) + dna(name~fecI,type~pro1,prot,up!?,dw!?) + rna(name~fecI,type~rbs,prot)    fwd_sliding_9_fecI_pro1_rbs
  sliding_fecI_cds:            prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~fecI,type~rbs,prot!4,up!?,dw!?) + dna(name~fecI,type~cds,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~fecI,type~cds,prot!4,up!?,dw!?) + dna(name~fecI,type~rbs,prot,up!?,dw!?) + rna(name~fecI,type~cds,prot)    fwd_sliding_fecI_cds
  sliding_fecI_ter1:           prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~fecI,type~cds,prot!4,up!?,dw!?) + dna(name~fecI,type~ter1,prot,up!?,dw!?) -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~fecI,type~ter1,prot!4,up!?,dw!?) + dna(name~fecI,type~cds,prot,up!?,dw!?)    fwd_sliding_fecI_ter1
  sliding_fliA_cds:            prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~fliA,type~rbs,prot!4,up!?,dw!?) + dna(name~fliA,type~cds,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~fliA,type~cds,prot!4,up!?,dw!?) + dna(name~fliA,type~rbs,prot,up!?,dw!?) + rna(name~fliA,type~cds,prot)    fwd_sliding_fliA_cds
  sliding_fliA_ter1:           prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~fliA,type~cds,prot!4,up!?,dw!?) + dna(name~fliA,type~ter1,prot,up!?,dw!?) -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~fliA,type~ter1,prot!4,up!?,dw!?) + dna(name~fliA,type~cds,prot,up!?,dw!?)    fwd_sliding_fliA_ter1
  sliding_rpoA_cds:            prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoA,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoA,type~cds,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoA,type~cds,prot!4,up!?,dw!?) + dna(name~rpoA,type~rbs,prot,up!?,dw!?) + rna(name~rpoA,type~cds,prot)    fwd_sliding_rpoA_cds
  sliding_rpoA_ter1:           prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoA,type~cds,prot!4,up!?,dw!?) + dna(name~rpoA,type~ter1,prot,up!?,dw!?) -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoA,type~ter1,prot!4,up!?,dw!?) + dna(name~rpoA,type~cds,prot,up!?,dw!?)    fwd_sliding_rpoA_ter1
  sliding_rpoB_cds:            prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoB,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoB,type~cds,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoB,type~cds,prot!4,up!?,dw!?) + dna(name~rpoB,type~rbs,prot,up!?,dw!?) + rna(name~rpoB,type~cds,prot)    fwd_sliding_rpoB_cds
  sliding_rpoC_cds:            prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoC,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoC,type~cds,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoC,type~cds,prot!4,up!?,dw!?) + dna(name~rpoC,type~rbs,prot,up!?,dw!?) + rna(name~rpoC,type~cds,prot)    fwd_sliding_rpoC_cds
  sliding_rpoC_rbs:            prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoB,type~cds,prot!4,up!?,dw!?) + dna(name~rpoC,type~rbs,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoC,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoB,type~cds,prot,up!?,dw!?) + rna(name~rpoC,type~rbs,prot)    fwd_sliding_rpoC_rbs
  sliding_rpoC_ter1:           prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoC,type~cds,prot!4,up!?,dw!?) + dna(name~rpoC,type~ter1,prot,up!?,dw!?) -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoC,type~ter1,prot!4,up!?,dw!?) + dna(name~rpoC,type~cds,prot,up!?,dw!?)    fwd_sliding_rpoC_ter1
  sliding_rpoD_cds:            prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoD,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoD,type~cds,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoD,type~cds,prot!4,up!?,dw!?) + dna(name~rpoD,type~rbs,prot,up!?,dw!?) + rna(name~rpoD,type~cds,prot)    fwd_sliding_rpoD_cds
  sliding_rpoD_ter1:           prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoD,type~cds,prot!4,up!?,dw!?) + dna(name~rpoD,type~ter1,prot,up!?,dw!?) -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoD,type~ter1,prot!4,up!?,dw!?) + dna(name~rpoD,type~cds,prot,up!?,dw!?)    fwd_sliding_rpoD_ter1
  sliding_rpoE_cds:            prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoE,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoE,type~cds,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoE,type~cds,prot!4,up!?,dw!?) + dna(name~rpoE,type~rbs,prot,up!?,dw!?) + rna(name~rpoE,type~cds,prot)    fwd_sliding_rpoE_cds
  sliding_rpoE_ter1:           prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoE,type~cds,prot!4,up!?,dw!?) + dna(name~rpoE,type~ter1,prot,up!?,dw!?) -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoE,type~ter1,prot!4,up!?,dw!?) + dna(name~rpoE,type~cds,prot,up!?,dw!?)    fwd_sliding_rpoE_ter1
  sliding_rpoH_cds:            prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoH,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoH,type~cds,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoH,type~cds,prot!4,up!?,dw!?) + dna(name~rpoH,type~rbs,prot,up!?,dw!?) + rna(name~rpoH,type~cds,prot)    fwd_sliding_rpoH_cds
  sliding_rpoH_ter1:           prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoH,type~cds,prot!4,up!?,dw!?) + dna(name~rpoH,type~ter1,prot,up!?,dw!?) -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoH,type~ter1,prot!4,up!?,dw!?) + dna(name~rpoH,type~cds,prot,up!?,dw!?)    fwd_sliding_rpoH_ter1
  sliding_rpoN_cds:            prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoN,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoN,type~cds,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoN,type~cds,prot!4,up!?,dw!?) + dna(name~rpoN,type~rbs,prot,up!?,dw!?) + rna(name~rpoN,type~cds,prot)    fwd_sliding_rpoN_cds
  sliding_rpoN_ter1:           prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoN,type~cds,prot!4,up!?,dw!?) + dna(name~rpoN,type~ter1,prot,up!?,dw!?) -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoN,type~ter1,prot!4,up!?,dw!?) + dna(name~rpoN,type~cds,prot,up!?,dw!?)    fwd_sliding_rpoN_ter1
  sliding_rpoS_cds:            prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoS,type~rbs,prot!4,up!?,dw!?) + dna(name~rpoS,type~cds,prot,up!?,dw!?) + 0 -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoS,type~cds,prot!4,up!?,dw!?) + dna(name~rpoS,type~rbs,prot,up!?,dw!?) + rna(name~rpoS,type~cds,prot)    fwd_sliding_rpoS_cds
  sliding_rpoS_ter1:           prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoS,type~cds,prot!4,up!?,dw!?) + dna(name~rpoS,type~ter1,prot,up!?,dw!?) -> prot(dna,dw!1,met,name~rpoA,up).prot(dna,dw!2,met,name~rpoA,up!1).prot(dna,dw!3,met,name~rpoB,up!2).prot(dna!4,dw,met,name~rpoC,up!3).dna(name~rpoS,type~ter1,prot!4,up!?,dw!?) + dna(name~rpoS,type~cds,prot,up!?,dw!?)    fwd_sliding_rpoS_ter1
end reaction rules

end model
